/*
 * exponential freq. chirp wave image, with automated convolution / deconvolution demos.
 *
 * Requires:
 * Iterative Deconvolution 3D plugin from Bob Dougherty
 * http://www.optinav.com/Iterative-Deconvolve-3D.htm
 * Gaussian PSF 3D from Bob Dougherty
 * http://www.optinav.com/download/Gaussian_PSF_3D.java
 *
 * What's it useful for:
 * Showing effect of Gaussian blurring (convolution) on contrast vs. spatial frequency,
 * then fixing the introduced error, within bandwidth of system, by deconvolution.
 *
 * see also http://imagej.nih.gov/ij/macros/DeconvolutionDemo.txt
 *
 * Showing a simulation of the systematic error effect
 * of the objecive lens OTF (similar to a Gaussian blur) on the
 * contrast of different spatial frequencies in a light microscopy image.
 * Showing why optical microscope images should be deconvolved,
 * to correct the systematic error of contrast vs. feature size:
 * Contrast of smaller and smaller features is attenuatted more and more,
 * up to the bad limit or noise floor, where deconvolution can no longer recover info.
 *
 * Measurements of small object intensities are lower then they should be
 * compared to larger objects, making quantitative analysis problematic.
 *
 * Deconvolution greatly improves the situation, to the resolution or noise limit.
 *
 * Why this approach?
 * Biologists are not familiar with frequency space and Fourier Theorem
 * The general trivial description of blur caused by the lens describes
 * the resoluition limit to some intuitive extent, but does not highlight
 * the main problem that deconvolution fixes: That the contrast of resolved
 * features is attenuated as a function of feature size - the OTF.
 * Meaning, quantification of intensity in different sized objects is likely
 * to be far from close to the true values until the image is deconvolved,
 * thus restoring the contrast and intensity of the smaller features.
 * The trick here is to show frequency space in real space: Not having to
 * explain frequency space so we don't lose most of the audience.
 *
 * How to do it:
 * open in script editor, select language imageJ macro and run
 * you might resize and position some windows.
 *
 * How to do it the old, but still useful way:
 * 1) Run the macro to generate the increasingly stripey image.
 * 2) Select all, then run plot profile (Ctrl-A, Ctrl-K)
 * 3) In plot profile, select live mode.
 * 4) Run the Gaussian Blur tool, set Sigma (Radius) to 5, turn on Preview.
 * 5) Toggle preview on and off to see the effect.
 * 6) Try different Sigma values to simulate different lens numerical apertures. Higher Sigma corresponds to lower N.A., and more blur.
 * 7) See the effect of noise on resolution by adding noise to the image. Use a line selection, not select all, for the plot profile.
 * 8) Note the bandwidth (resolution limit) imposed by the blur.
 * 9) Note that high spatial frequencies close to the resolution limit have their contrast more strongly attenuated than lower spatial frequency features.
 */

// with and height of test "Chirp" image
w = 1024;
h = 1024;

newImage("Chirp", "32-bit black", w, h, 1);
for (j = 0; j < h; j++)
	for (i = 0; i < w; i++) {
		t = (i/255.6); // this value avoids sharp discontinuity at 1024 wide image edge, less artifacts?

		// linear chrip
		// pixValue = sin((2*PI)*(0.1+t)*t);
		
		// exponential chirp
		fzero = 0.1;
		k = 3;
		
		pixValue = sin(2*PI*fzero*(pow(k,t)*t));
		
		// scale to pix value range 0-256
		scaledPixVal = (pixValue+1) * 127;
		setPixel(i, j, scaledPixVal);
	}

// reset display and show the plot profile - wave has same contrast regardless of spacing of stripes.
resetMinAndMax();
makeLine(0, 32, 1023, 32);
run("Plot Profile");

waitForUser("Generate blurred, and noisy blurred images, Continue?");

selectWindow("Chirp");
run("Duplicate...", "title=Chirp-blur");
run("Gaussian Blur...", "sigma=5");
makeLine(0, 32, 1023, 32);
run("Plot Profile");

selectWindow("Chirp-blur");
run("Duplicate...", "title=Chirp-blur-noise");
run("Add Specified Noise...", "standard=2.0");
makeLine(0, 32, 1023, 32);
run("Plot Profile");

waitForUser("Generate PSF matching the blur, for deconvolution, Continue?");

// generate 5 sigma 2D Gaussian PSF for use in deconvolution
run("Gaussian PSF 3D", "width=1024 height=1024 number=1 dc-level=255 horizontal=5 vertical=5 depth=0.01");
selectWindow("PSF");

waitForUser("Inverse Filter next, Continue?");

// Fourier domain math deconvolve: inverse filter with PSF.
// needs square power of 2 images!!! so 1024x1024 here i guess.
// Fix Me - doesnt work because convolution and deconv PSF are not exactly the same!!
// convolution used Gaussian blur built-in function,
// but FD math deconv uses kernel from Gaussian PSF 3D plugin
// Could use FD math to do the convolution as well, instead of built-in Gaussian blur function.
run("FD Math...", "image1=Chirp-blur operation=Deconvolve image2=PSF result=InverseFilteredNoNoise do");

waitForUser("Iterative Deconvolution using generted PSF next, Continue?");

selectWindow("Chirp-blur-noise");
run("Iterative Deconvolve 3D", "image=Chirp-blur-noise point=PSF output=Deconvolved normalize show log wiener=0.33 low=0 z_direction=1 maximum=35 terminate=0.005");
setMinAndMax(0, 255);
makeLine(0, 32, 1023, 32);
run("Plot Profile");
Plot.setLogScaleX(false);
Plot.setLogScaleY(false);
Plot.setLimits(0,1023,0,255);

//http://dev.theomader.com/gaussian-kernel-calculator/

//Gaussian sharpen:
// http://www.aforgenet.com/framework/docs/html/4600a4d7-825b-138f-5c31-249a10335b26.htm
